PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = pitch discrimination task
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Routines
  Routine Practice_instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with 2 tones. Your job is to identify whether the tones went up or down; that is, was the second tone higher or lower than the first? If you think the second tone was higher, please press “m”. If you think the second tone was lower, please press “z”. The instructions will remain on the screen for the duration of the experiment.

        You will first be presented with a series of practice trials. Once those trials are complete, you will proceed to the main experiment.

        Please ask the experimenter if you have any questions. If you do not have any questions, please press the spacebar to proceed with the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_1
    SoundComponent sound1_1
      sound [set every repeat] = $sound1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    SoundComponent sound1_2
      sound [set every repeat] = $sound2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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    TextComponent HigherLower_msg1
      color [set every repeat] = black
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Was the second tone higher ("m") or lower ("z") than the first tone?
    KeyboardComponent key_resp_2
      allowedKeys = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = str($pract_trial.thisN+1)+"/" + str($pract_trial.nTotal)
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  Routine main_instructions
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        In this experiment, you will be presented with 2 tones. Your job is to identify whether the tones went up or down; that is, was the second tone higher or lower than the first? If you think the second tone was higher, please press “/”. If you think the second tone was lower, please press “z”. The instructions will remain on the screen for the duration of the experiment.

        Please ask the experimenter if you have any questions. If you do not have any questions, please press the spacebar to proceed with the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2
    SoundComponent sound2_1
      sound [set every repeat] = $sound1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    SoundComponent sound2_2
      sound [set every repeat] = $sound2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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    TextComponent HigherLower_msg2
      color = black
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Was the second tone higher ("m") or lower ("z") than the first tone?
    KeyboardComponent key_resp_4
      allowedKeys = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      store = all keys
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = str($pract_trial.thisN+1) + "/" + str($pract_trial.nTotal)
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  Routine the_end
    TextComponent text_5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating in the experiment! 
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Flow
  Routine Practice_instructions
  LoopInitiator pract_trial loopType="TrialHandler"
    conditionsFile = practice_stimuli.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic32.wav'), ('corrAns', 'z')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic42.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic46.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic38.wav'), ('corrAns', 'z')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic36.wav'), ('corrAns', 'z')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic44.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic48.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic34.wav'), ('corrAns', 'z')])]
    Routine trial_1
  LoopTerminator pract_trial
  Routine main_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial_2
  LoopTerminator trials_2
  Routine the_end
